! BEGIN_META
! META_CMD_NAME	= Events_Single_Belt_Treadmill_Gait
! END_META

! +++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++
!  Copyright notice
!  This PAF and its content is copyright of Qualisys AB © 2012-2019. All rights reserved. 
!  The PAF script is only to be used in conjunction with a Qualisys Motion Capture System. 
!  Only legal PAF owners are entitled to use the script and only in relation with related PAF.
! +++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++

!Calculate the size of the window that will be used for the event detection. This changes depending on the frame rate.
!=========================================
Select_Active_File
/FILE_NAME=Dynamic
;

Set_Pipeline_Parameter_To_Data_Value
/PARAMETER_NAME=WINDOW
/SIGNAL_TYPES=METRIC
/SIGNAL_NAMES=WINDOW
/SIGNAL_FOLDER=PROCESSED
! /SIGNAL_COMPONENTS=ALL_COMPONENTS
;

Expression_Loop
/ITERATION_PARAMETER_NAME=loop
/EXPRESSION=METRIC::VIRTUAL_LAB::LAB_LATERAL::X = 0
/AS_INTEGER=TRUE
;
	
	Evaluate_Expression
	/EXPRESSION=KINETIC_KINEMATIC::LFT::CGPos::X - KINETIC_KINEMATIC::RFT::CGPos::X
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=EVENTS
	/RESULT_NAME=feet_distance
	! /APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
	;

Expression_Loop_End
/ITERATION_PARAMETER_NAME=loop
;

Expression_Loop
/ITERATION_PARAMETER_NAME=loop
/EXPRESSION=METRIC::VIRTUAL_LAB::LAB_LATERAL::Y = 0
/AS_INTEGER=TRUE
;
	
	Evaluate_Expression
	/EXPRESSION=KINETIC_KINEMATIC::LFT::CGPos::Y - KINETIC_KINEMATIC::RFT::CGPos::Y
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=EVENTS
	/RESULT_NAME=feet_distance
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	;

Expression_Loop_End
/ITERATION_PARAMETER_NAME=loop
;

! Modify_Force_Platform_Parameters
! /FP_USED=1
! /FP_TYPE=6
! /FP_CHANNEL=2+1+3+8+7+9+11+10+12+5+4+6
! /FP_ORIGIN=354+534+-43
! /FP_CALMATRIX=-73.2172+0+0+0+0+0+0+0+0+0+0+0+0+73.1342+0+0+0+0+0+0+0+0+0+0+0+0+142.07+0+0+0+0+0+0+0+0+0+0+0+0+73.38+0+0+0+0+0+0+0+0+0+0+0+0+-72.9868+-0+0+0+0+0+0+0+0+0+0+0+0+142.045+0+0+0+0+0+0+0+0+0+0+0+0+73.0369+-0+0+0+0+0+0+0+0+0+0+0+0+-73.1139+-0+0+0+0+0+0+0+0+0+0+0+-0+142.175+0+0+0+0+0+0+0+0+0+0+0+0+-73.4473+-0+0+0+0+0+0+0+0+0+0+0+0+73.1786+0+0+0+0+0+0+0+0+0+0+0+-0+142.223
! /STORE_CALMATRIX=BYCOLUMN
! /FP_ZERO=0+0
! /FP_ZEROS=0+0
! /FP_COP_POLYNOMIAL=0+0+0+0+0+0+0+0+0+0+0+0
! /FP_COP_TRANSLATION=0+0+0
! /FP_COP_ROTATION=0+0+0
! ! /UPDATE_C3D_FILE=FALSE
! ! /MODIFY_CAL_FILE=FALSE
! ;

First_Derivative
/SIGNAL_TYPES=COFP
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=FP1
/RESULT_TYPES=DERIVED
/RESULT_FOLDER=EVENTS
/RESULT_NAME=_vel
/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=TRUE
;

Lowpass_Filter
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=EVENTS
/SIGNAL_NAMES=FP1_vel
/RESULT_FOLDER=EVENTS
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! /FILTER_CLASS=BUTTERWORTH
/FREQUENCY_CUTOFF=4.0
! /NUM_REFLECTED=6
! /NUM_EXTRAPOLATED=0
! /TOTAL_BUFFER_SIZE=6
! /NUM_BIDIRECTIONAL_PASSES=1
;

Event_Threshold
/RESULT_EVENT_NAME=L_SWING
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=EVENTS
/SIGNAL_NAMES=feet_distance
/SIGNAL_COMPONENTS=X
! /FRAME_OFFSET=0
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! /EVENT_SEQUENCE_INSTANCE=0
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! /EVENT_SUBSEQUENCE_INSTANCE=0
! /EVENT_INSTANCE=0
/THRESHOLD=0
/ON_ASCENT=TRUE
/ON_DESCENT=FALSE
/FRAME_WINDOW=::WINDOW
! /ENSURE_FRAMES_BEFORE=FALSE
! /ENSURE_FRAMES_AFTER=FALSE
;

Event_Threshold
/RESULT_EVENT_NAME=R_SWING
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=EVENTS
/SIGNAL_NAMES=feet_distance
/SIGNAL_COMPONENTS=X
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/THRESHOLD=0
/ON_ASCENT=FALSE
/ON_DESCENT=TRUE
/FRAME_WINDOW=::WINDOW
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;

Event_Threshold
/RESULT_EVENT_NAME=LHS
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=EVENTS
/SIGNAL_NAMES=FP1_vel
/SIGNAL_COMPONENTS=X
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/EVENT_SEQUENCE=L_SWING+R_SWING
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/EVENT_SEQUENCE_INSTANCE=0
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/THRESHOLD=0
/ON_ASCENT=TRUE
/ON_DESCENT=FALSE
/FRAME_WINDOW=::WINDOW
/ENSURE_FRAMES_BEFORE=TRUE
/ENSURE_FRAMES_AFTER=TRUE
;

Event_Threshold
/RESULT_EVENT_NAME=RHS
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=EVENTS
/SIGNAL_NAMES=FP1_vel
/SIGNAL_COMPONENTS=X
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/EVENT_SEQUENCE=R_SWING+L_SWING
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/EVENT_SEQUENCE_INSTANCE=0
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/THRESHOLD=0
/ON_ASCENT=TRUE
/ON_DESCENT=FALSE
/FRAME_WINDOW=::WINDOW
/ENSURE_FRAMES_BEFORE=TRUE
/ENSURE_FRAMES_AFTER=TRUE
;

Event_Threshold
/RESULT_EVENT_NAME=LTO
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=EVENTS
/SIGNAL_NAMES=FP1_vel
/SIGNAL_COMPONENTS=X
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/EVENT_SEQUENCE=R_SWING+L_SWING
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/EVENT_SEQUENCE_INSTANCE=0
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/THRESHOLD=0
/ON_ASCENT=FALSE
/ON_DESCENT=TRUE
/FRAME_WINDOW=::WINDOW
/ENSURE_FRAMES_BEFORE=TRUE
/ENSURE_FRAMES_AFTER=TRUE
;

Event_Threshold
/RESULT_EVENT_NAME=RTO
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=EVENTS
/SIGNAL_NAMES=FP1_vel
/SIGNAL_COMPONENTS=X
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/EVENT_SEQUENCE=L_SWING+R_SWING
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/EVENT_SEQUENCE_INSTANCE=0
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/THRESHOLD=0
/ON_ASCENT=FALSE
/ON_DESCENT=TRUE
/FRAME_WINDOW=::WINDOW
/ENSURE_FRAMES_BEFORE=TRUE
/ENSURE_FRAMES_AFTER=TRUE
;

Event_Copy
/EVENT_NAME=LHS
/NEW_EVENT_NAME=LON
/FRAME_OFFSET=0
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! /RANGE_INSTANCE=0
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;

Event_Copy
/EVENT_NAME=RHS
/NEW_EVENT_NAME=RON
/FRAME_OFFSET=0
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;

Event_Copy
/EVENT_NAME=LTO
/NEW_EVENT_NAME=LOFF
/FRAME_OFFSET=0
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;

Event_Copy
/EVENT_NAME=RTO
/NEW_EVENT_NAME=ROFF
/FRAME_OFFSET=0
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;

Remove_Segment_Assignment_To_Force_And_COP
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/FORCE_SIGNAL_NAME=
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/COP_SIGNAL_NAME=
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/SEGMENT_NAME=RFT
/START_FRAME=1
/END_FRAME=EOF
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;

Remove_Segment_Assignment_To_Force_And_COP
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/FORCE_SIGNAL_NAME=
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/COP_SIGNAL_NAME=
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/SEGMENT_NAME=LFT
/START_FRAME=1
/END_FRAME=EOF
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;

Assign_Segments_To_Force_And_COP
! /FORCE_SIGNAL_TYPE=FORCE
! /FORCE_SIGNAL_FOLDER=ORIGINAL
/FORCE_SIGNAL_NAME=FP1
! /COP_SIGNAL_TYPE=COFP
! /COP_SIGNAL_FOLDER=ORIGINAL
/COP_SIGNAL_NAME=FP1
! /FREEMOMENT_SIGNAL_TYPE=FREEMOMENT
! /FREEMOMENT_SIGNAL_FOLDER=ORIGINAL
/FREEMOMENT_SIGNAL_NAME=FP1
/AUTO_ASSIGN=FALSE
/SEGMENT_NAME=RFT
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/EVENT_SEQUENCE=LOFF+LON
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;

Assign_Segments_To_Force_And_COP
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/FORCE_SIGNAL_NAME=FP1
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/COP_SIGNAL_NAME=FP1
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/FREEMOMENT_SIGNAL_NAME=FP1
/AUTO_ASSIGN=FALSE
/SEGMENT_NAME=LFT
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/EVENT_SEQUENCE=ROFF+RON
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;

Recalc
;