! BEGIN_META
! META_CMD_NAME	= Recalc_Gait
! META_PARAM	= model_used  :   string ::yes						
! META_PARAM	= left_foot_normalized  :   string ::yes						
! META_PARAM	= right_foot_normalized  :   string ::yes						
! META_PARAM	= includes_thorax  :   string ::yes						
! META_PARAM	= includes_OFM  :   string ::yes						
! META_PARAM	= event_mode  :   string ::yes						
! END_META

! +++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++
!  Copyright notice
!  This PAF and its content is copyright of Qualisys AB © 2012-2019. All rights reserved. 
!  The PAF script is only to be used in conjunction with a Qualisys Motion Capture System. 
!  Only legal PAF owners are entitled to use the script and only in relation with related PAF.
! +++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++

Compute_Model_Based_Data
/RESULT_NAME=Right Pelvic Angles
/FUNCTION=JOINT_ANGLE
/SEGMENT=RPV
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=
! /USE_CARDAN_SEQUENCE=FALSE
! /NORMALIZATION=FALSE
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/NEGATEX=TRUE
/NEGATEY=TRUE
! /NEGATEZ=FALSE
/AXIS1=Z
! /AXIS2=Y
/AXIS3=X
;

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Angles
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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! /NEGATEX=FALSE
! /NEGATEY=FALSE
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! /AXIS1=X
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! /AXIS3=Z
;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Angles
/FUNCTION=JOINT_ANGLE
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Pelvic Angles
/FUNCTION=JOINT_ANGLE
/SEGMENT=RPV
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
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/NEGATEZ=TRUE
/AXIS1=Z
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/AXIS3=X
;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Angles
/FUNCTION=JOINT_ANGLE
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Power
/FUNCTION=JOINT_POWER
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Power
/FUNCTION=JOINT_POWER
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Power
/FUNCTION=JOINT_POWER
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Power
/FUNCTION=JOINT_POWER
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=("&::model_used&" = "CGM")
! /AS_INTEGER=TRUE
;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Ankle Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=LFT
	/REFERENCE_SEGMENT=LSK
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEY=TRUE
	/NEGATEZ=TRUE
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	;
	
	Compute_Model_Based_Data
	/RESULT_NAME=Left Foot Pitch Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=LFT
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	! /TREADMILL_DATA=FALSE
	! /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
	! /TREADMILL_SPEEED=0.0
	;


Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=(("&::model_used&" <> "CGM") &::AMP& ("&::left_foot_normalized&" = "TRUE"))
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;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Ankle Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Left Foot Normalized
	/REFERENCE_SEGMENT=LSK
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEY=TRUE
	/NEGATEZ=TRUE
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Foot Pitch Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Left Foot Normalized
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Foot Progression
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Left Foot Normalized
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEZ=TRUE
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	;

Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=(("&::model_used&" <> "CGM") &::AMP& ("&::left_foot_normalized&" <> "TRUE"))
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;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Ankle Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=LMF
	/REFERENCE_SEGMENT=LSK
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEY=TRUE
	/NEGATEZ=TRUE
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Foot Pitch Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=LMF
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Foot Progression
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=LMF
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEZ=TRUE
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	;

Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=("&::model_used&" = "CGM")
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;

	Evaluate_Expression
	/EXPRESSION=LINK_MODEL_BASED::ORIGINAL::Left Ankle Angles - METRIC::PROCESSED::LAnkleAnglesOffsets
	/RESULT_TYPES=LINK_MODEL_BASED
	/RESULT_NAME=LAnkleAnglesShifted
	;

	Evaluate_Expression
	/EXPRESSION=vector(LINK_MODEL_BASED::PROCESSED::LAnkleAnglesShifted::x,LINK_MODEL_BASED::PROCESSED::LAnkleAnglesShifted::z,LINK_MODEL_BASED::PROCESSED::LAnkleAnglesShifted::y)
	/RESULT_TYPES=LINK_MODEL_BASED
	/RESULT_NAME=Left Ankle Angles
	;
	
Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=("&::model_used&" <> "CGM")
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;

	Evaluate_Expression
	/EXPRESSION=LINK_MODEL_BASED::ORIGINAL::Left Ankle Angles
	/RESULT_TYPES=LINK_MODEL_BASED
	/RESULT_NAME=Left Ankle Angles
	;
	
Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=("&::model_used&" = "CGM")
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;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Ankle Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=RFT
	/REFERENCE_SEGMENT=RSK
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Foot Pitch Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=RFT
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=("&::model_used&" <> "CGM") &::AMP& ("&::right_foot_normalized&" = "TRUE")
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;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Ankle Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Right Foot Normalized
	/REFERENCE_SEGMENT=RSK
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Foot Pitch Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Right Foot Normalized
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Foot Progression
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Right Foot Normalized
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=("&::model_used&" <> "CGM") &::AMP& ("&::right_foot_normalized&" <> "TRUE")
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;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Ankle Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=RMF
	/REFERENCE_SEGMENT=RSK
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Foot Pitch Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=RMF
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Foot Progression
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=RMF
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=("&::model_used&" = "CGM")
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;

	Evaluate_Expression
	/EXPRESSION=LINK_MODEL_BASED::ORIGINAL::Right Ankle Angles - METRIC::PROCESSED::RAnkleAnglesOffsets
	/RESULT_TYPES=LINK_MODEL_BASED
	/RESULT_NAME=RAnkleAnglesShifted
	;

	Evaluate_Expression
	/EXPRESSION=vector(LINK_MODEL_BASED::PROCESSED::RAnkleAnglesShifted::x,LINK_MODEL_BASED::PROCESSED::RAnkleAnglesShifted::z,LINK_MODEL_BASED::PROCESSED::RAnkleAnglesShifted::y)
	/RESULT_TYPES=LINK_MODEL_BASED
	/RESULT_NAME=Right Ankle Angles
	;
	
Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=("&::model_used&" <> "CGM")
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;

	Evaluate_Expression
	/EXPRESSION=LINK_MODEL_BASED::ORIGINAL::Right Ankle Angles
	/RESULT_TYPES=LINK_MODEL_BASED
	/RESULT_NAME=Right Ankle Angles
	;
Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=("&::model_used&" = "CGM")
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;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Foot Progression
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=RFT
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Foot Progression
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=LFT
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEZ=TRUE
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=LAnkleAnglesStaticOnly
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=LFT
	/REFERENCE_SEGMENT=LFOOT_1
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=RAnkleAnglesStaticOnly
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=RFT
	/REFERENCE_SEGMENT=RFOOT_1
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Angles
/FUNCTION=JOINT_ANGLE
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Power
/FUNCTION=JOINT_POWER
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Power
/FUNCTION=JOINT_POWER
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Right GRF
/FUNCTION=GRF_DATA
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=Virtual Lab
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Left GRF
/FUNCTION=GRF_DATA
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=Virtual Lab
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Afo Left Foot Progression
/FUNCTION=JOINT_ANGLE
/SEGMENT=Equinus Foot Left
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Afo Right Foot Progression
/FUNCTION=JOINT_ANGLE
/SEGMENT=Equinus Foot Right
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=
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;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=("&::includes_thorax&" = "TRUE")
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;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Thorax_Lab Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=RTA
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEX=TRUE
	/NEGATEY=TRUE
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	/AXIS1=Z
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	/AXIS3=X
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Thorax_Lab Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=RTA
	/REFERENCE_SEGMENT=Virtual Lab
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEX=TRUE
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	/NEGATEZ=TRUE
	/AXIS1=Z
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	/AXIS3=X
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Thorax Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=RTA
	/REFERENCE_SEGMENT=RPV
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEX=TRUE
	/NEGATEY=TRUE
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Thorax Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=RTA
	/REFERENCE_SEGMENT=RPV
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEX=TRUE
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	/NEGATEZ=TRUE
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Shoulder Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=LAR
	/REFERENCE_SEGMENT=RTA
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEY=TRUE
	/NEGATEZ=TRUE
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Shoulder Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=RAR
	/REFERENCE_SEGMENT=RTA
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Elbow Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=LFA
	/REFERENCE_SEGMENT=LAR
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEY=TRUE
	/NEGATEZ=TRUE
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Elbow Angles
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=RFA
	/REFERENCE_SEGMENT=RAR
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=("&::event_mode&" <> "No forceplate")
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;

	Compute_Model_Based_Data
	/RESULT_NAME=L_COP
	/FUNCTION=COP_PATH
	/SEGMENT=LFT
	/REFERENCE_SEGMENT=
	! /RESOLUTION_COORDINATE_SYSTEM=LAB
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=L_COP_rt_LFT
	/FUNCTION=COP_PATH
	/SEGMENT=LFT
	/REFERENCE_SEGMENT=
	/RESOLUTION_COORDINATE_SYSTEM=LFT
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=R_COP
	/FUNCTION=COP_PATH
	/SEGMENT=RFT
	/REFERENCE_SEGMENT=
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=R_COP_rt_RFT
	/FUNCTION=COP_PATH
	/SEGMENT=RFT
	/REFERENCE_SEGMENT=
	/RESOLUTION_COORDINATE_SYSTEM=RFT
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	;
	
Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=("&::includes_OFM&" = "TRUE")
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;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Hindfoot Tibia Angle
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Right Hindfoot
	/REFERENCE_SEGMENT=RSK
	/RESOLUTION_COORDINATE_SYSTEM=
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	/AXIS2=Z
	/AXIS3=Y
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Hindfoot Tibia Angle
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Left Hindfoot
	/REFERENCE_SEGMENT=LSK
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEY=TRUE
	/NEGATEZ=TRUE
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	/AXIS2=Z
	/AXIS3=Y
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Forefoot Tibia Angle
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Right Forefoot
	/REFERENCE_SEGMENT=RSK
	/RESOLUTION_COORDINATE_SYSTEM=
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	/AXIS2=Z
	/AXIS3=Y
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Forefoot Tibia Angle
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Left Forefoot
	/REFERENCE_SEGMENT=LSK
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEY=TRUE
	/NEGATEZ=TRUE
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	/AXIS2=Z
	/AXIS3=Y
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Forefoot Hindfoot Angle
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Right Forefoot
	/REFERENCE_SEGMENT=Right Hindfoot
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Forefoot Hindfoot Angle
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Left Forefoot
	/REFERENCE_SEGMENT=Left Hindfoot
	/RESOLUTION_COORDINATE_SYSTEM=
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	/NEGATEY=TRUE
	/NEGATEZ=TRUE
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Right Hallux Forefoot Angle
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Right Hallux
	/REFERENCE_SEGMENT=Right Forefoot
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

	Compute_Model_Based_Data
	/RESULT_NAME=Left Hallux Forefoot Angle
	/FUNCTION=JOINT_ANGLE
	/SEGMENT=Left Hallux
	/REFERENCE_SEGMENT=Left Forefoot
	/RESOLUTION_COORDINATE_SYSTEM=
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	;

Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;
